PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = InterleavedStaircase
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please evaluate the differences in realism between the two scenes. You will be presented with 2 images describing the same scene with a short interval between them.

        A reference image will also be provided for each scene.

        Press the  ‘left’ arrow key if you think the first stimulus was more realistic.

        Press the  ‘right’ arrow key if you think the second stimulus was more realistic.

        Press any key to start
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine set_condition
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        imageSet = imageSetLvl
        imageSetStr = str(imageSet)
        setName = imageSetName
        nRefImage = refSetNumber

        initStep = (nRefImage) * 2.5

        #noOfMiniScenes  = 3
        noOfMiniScenes = 2

        reversals = 0
        trialCounter = 1

        reversalsSharp = 0
        reversalsFlat =  0



        levList = [0] * 2
        respList = [0] * 2
        kestList = [0] * 2
        reverseList = [0] * 2
        localTrialNo = [0] * 2
        staircaseTrialNo = [1] * 2

        for i in range(2):
            levList[i] = [0] * (noOfMiniScenes + 2)
            respList[i] = [0] * (noOfMiniScenes + 2)
            kestList[i] = [0] * (noOfMiniScenes + 2)
            reverseList[i] = [0] * (noOfMiniScenes + 2)
            localTrialNo[i] = [0] * (noOfMiniScenes + 2)
            for j in range(noOfMiniScenes + 2):
                levList[i][j] = [0] * 100
                respList[i][j] = [0] * 100
                kestList[i][j] = [0] * 100
                reverseList[i][j] = [0] * 100
                localTrialNo[i][j] = 1




        #globalTrialNo = 60
        globalTrialNo = 64

        maxNoFlat = globalTrialNo/(noOfMiniScenes * 2)

        referenceImage = f'stimuli/{imageSetStr}/ref.png'


        #image = visual.ImageStim(win, image='stimuli/studio/21_studio.png')
        #imageRatio = image.size[1] / image.size[0]
        #print("Aspect ratio is: " + str(imageRatio))
        #newScale = 1 # new horizontal size. vertical size will scale appropriately.
        #image.setSize((newScale, newScale * imageRatio)) #
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Reference Image 
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    ImageComponent image
      image [set every repeat] = $referenceImage
      size = (2, 2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
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  Routine trial
    CodeComponent kesten_stair
      Code Type = Py
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      Begin Routine:
        images1 = [f'stimuli/{imageSetStr}/1/{i}.png' for i in range(22)]
        images2 = [f'stimuli/{imageSetStr}/2/{i}.png' for i in range(22)]
        images3 = [f'stimuli/{imageSetStr}/3/{i}.png' for i in range(22)]



        currentScene = int(random() * noOfMiniScenes) + 1
        staircase = round(random())

        if staircase == 0 and staircaseTrialNo[staircase] > globalTrialNo/2:
            staircase = 1
        if staircase == 1 and staircaseTrialNo[staircase] > globalTrialNo/2:
            staircase = 0

        if trialCounter <= globalTrialNo:
            if staircase == 0:
                    phi = 0.25
                    initN = nRefImage * 3
                    staircaseTrialNo[staircase] += 1
                    if localTrialNo[staircase][currentScene] > maxNoFlat:
                        i = 1
                        while (i <= noOfMiniScenes):
                            if localTrialNo[staircase][i] <= maxNoFlat:
                                currentScene = i
                            i = i + 1
            else:
                    phi = 0.75
                    initN = 0
                    staircaseTrialNo[staircase] += 1
                    if localTrialNo[staircase][currentScene] > maxNoFlat:
                        i = 1
                        while (i <= noOfMiniScenes):
                            if localTrialNo[staircase][i] <= maxNoFlat:
                                currentScene = i
                            i = i + 1

        if currentScene == 1:
            images = images1
        elif currentScene == 2:
            images = images2
        elif currentScene == 3:
            images = images3
        print("Current local scene no is: " + str(currentScene))
        trial = localTrialNo[staircase][currentScene]
        print("Trial is: " + str(trial) + " " + str(staircase))

        if random() > 0.5:
            refSide = 1
        else:
            refSide = -1

        compSide = refSide * -1

        if trial == 1:
           levList[staircase][currentScene][trial] = initN
        elif trial == 2:
            levList[staircase][currentScene][trial] = initN-(initStep/2)*(kestList[staircase][currentScene][trial-1]-phi)
        else:
            levList[staircase][currentScene][trial] = levList[staircase][currentScene][trial-1]-(initStep/(reversals+2))*(kestList[staircase][currentScene][trial-1]-phi)

        print("Before quality level is: " + str(levList[staircase][currentScene][trial]))
        # bound range
        if staircase ==  0:
            if levList[staircase][currentScene][trial] > initN:
                levList[staircase][currentScene][trial] = initN
            if levList[staircase][currentScene][trial] < 0:
                levList[staircase][currentScene][trial] = 0
        elif staircase == 1:
            if levList[staircase][currentScene][trial] < initN:
                levList[staircase][currentScene][trial] = initN
            if levList[staircase][currentScene][trial] < 0:
                levList[staircase][currentScene][trial] = 0


        print("Current quality level is: " + str(levList[staircase][currentScene][trial]))

        nCompQuality = int(round(levList[staircase][currentScene][trial]))

        comp_num = nCompQuality


        #winAspectRatio = win.size[1]/win.size[0]
        #print("Window aspect ratio is: " + str(winAspectRatio))
        #leftImagePortrait.size = (1, 1*winAspectRatio)
        #rightImagePortrait.size = (1, 1*winAspectRatio)

        if refSide == -1:
            leftImage = images[nRefImage]
            rightImage = images[comp_num]

        else:
            leftImage = images[comp_num]
            rightImage = images[nRefImage]
      End Routine:
        # store level and response
        #respList.append(response)
        thisExp.addData('Trial No.', localTrialNo[staircase][currentScene])
        thisExp.addData('Comp Side', refSide * -1)
        thisExp.addData('Ref Num', nRefImage)
        thisExp.addData('Level List', levList[staircase][currentScene][trial])
        thisExp.addData('Bounce Num', comp_num)
        thisExp.addData('Staircase', staircase)
        thisExp.addData('Scene No', currentScene)

        kestResp = 0
        if compSide < 0 and resp.keys == 'left':
            kestResp = 1 # comp more realistic
        elif compSide > 0 and resp.keys == 'right':
            kestResp = 1 # comp more realisitic


        kestList[staircase][currentScene][trial] = kestResp
        thisExp.addData('comp>ref?', kestResp)

        # count reversals
        if localTrialNo[staircase][currentScene] > 1:
            if kestList[staircase][currentScene][trial] != kestList[staircase][currentScene][trial-1]:
                reversals += 1
                reverseList[staircase][currentScene][reversals] = levList[staircase][currentScene][trial-1]

        # increment trials
        localTrialNo[staircase][currentScene] += 1
        trialCounter = trialCounter + 1
    ImageComponent leftImagePortrait
      image [set every repeat] = $leftImage
      size = (2, 2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent rightImagePortrait
      image [set every repeat] = $rightImage
      size = (2, 2)
      startVal [time (s)] = 3.2
      stopVal [duration (s)] = 2.5
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 5.7
      text = Please record your answer. 
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    StaticComponent ISI_2
      startVal [time (s)] = 3
      stopVal [duration (s)] = 0.2
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  Routine end
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for participating in this trial. 
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Flow
  Routine Instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = imageCondsNewest.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageSetLvl', 'decanterStudio'), ('imageSetName', 'decanterStudio'), ('refSetNumber', 7)]),
      OrderedDict([('imageSetLvl', 'decanterBedroom'), ('imageSetName', 'noCokeStudio'), ('refSetNumber', 7)])]
    Routine set_condition
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 64
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      Routine trial
    LoopTerminator trials
  LoopTerminator trials_2
  Routine end
